' Alerts
' + Buoy lon/lat outside range -> Buoy off chain. Drifting | Persistent until snoozed. Send Position and SOG/COG
' + Battery Low / Water Infiltration / Failed Winch -> Send once until the flag is reset. (Breaker tripped)
' + Instrument Failed sampling. Each time. 

Const EarthRadius = 6371e3 'For position computation

' Alert & Warnig Switch for the user to turn on/off
Public Buoy_Adrift_Alert_Set As Boolean = False 
' -> Once the alert is set, the buoy is considered adrift until resetted to false.
'    That way, the email will continue to be sent even if the buoy return within the acceptable range.
Public Buoy_Adrift_Alert_Snoozed As Boolean = False 
' -> Snoozing will only stop the Emails, the buoy is still considere adrift.
Public PositionDeviation As Long 


Public Battery_Low_Warning_Reset As Boolean = True
Public Water_Infiltration_Warning_Reset As Boolean = True
Public Failed_Winch_Warning_Reset As Boolean = True

Dim SaveLog as Boolean = False ' Save log on Failed instrument sampling.


Function ComputePositionDeviation As Float ' FIXME test me NOT WORKING AT THE MOMENT
    ' 2023-12-20 20:08:01.862 - Position Deviantion (Lat, Lon, Lat0, Lon0, c, a): 48.64065, -68.15578, 48.6407, -68.15592, 0.0001034108, 8.143783e-13
    ' 2023-12-20 20:08:01.916 - Position Deviation: 658 m.
    'Compute the distance of the current position to  Longitude_0, Latitude_0
    Dim a As Float = ""
    Dim c As Float = ""

    a = (SIN((Latitude_Decimal - Latitude_0)/2))^2 + COS(Latitude_Decimal) * COS(Latitude_0) * (SIN((Longitude_Decimal - Longitude_0)/2))^2
    c = 2*ATN2(SQR(a), SQR(1-a))
    ComputePositionDeviation =  EarthRadius * c

    Call logging("Position Deviantion (Lat, Lon, Lat0, Lon0, c, a): " & Latitude_Decimal&", "&Longitude_Decimal&", "&Latitude_0&", "&Longitude_0&", "&c&", "&a)
EndFunction

Sub Buoy_Adrift_Check ' FIXME test me
    PositionDeviation = ComputePositionDeviation()
    Call logging("Position Deviation: " & PositionDeviation & " m.")
    If Not Buoy_Adrift_Alert_Set Then
        If PositionDeviation > Allowed_Position_Deviation Then 
            Buoy_Adrift_Alert_Set = True
        EndIf
    EndIf

    If Buoy_Adrift_Alert_Set Then
        Call logging("ALERT Buoy Adrift")    
        Call Buoy_Adrift_Email
    EndIf
EndSub

Sub Buoy_Adrift_Email
    If Not Buoy_Adrift_Alert_Snoozed Then
        'FIXME TEST IF UNITS OF SOG AND COG Follow
        Call Email_Init(1, "BUOY ADRIFT")
        Call Email_add_line("Lat: " & Latitude)
        Call Email_add_line("Lon: " & Longitude)
        Call Email_add_line("SOG: " & SOG)
        Call Email_add_line("COG: " & COG)
        Call SendEmail
    EndIf
EndSub

Sub Failed_Winch_Email
    If Failed_Winch_Warning_Reset Then
        Call Email_Init(0, "Winch Failed")
        Call Email_add_line("Winch Missing Conditions: " & WinchMissingCondition)
        Call SendEmail

        Failed_Winch_Warning_Reset = False
    EndIf
EndSub


Sub Water_Infiltration_Email
    If Water_Infiltration_Warning_Reset Then
        Call Email_Init(0, "Water Infiltration")
        Call Email_add_line("Water Detection: " &  Water_Detection_Main)
        Call SendEmail

        Water_Infiltration_Warning_Reset = False
    EndIf
EndSub


Sub Battery_Low_Email
    If Battery_Low_Warning_Reset Then
        Call Email_Init(0, "Battery Low")
        Call Email_add_line("VBatt1: " & VBatt1)
        Call Email_add_line("VBatt2: " & VBatt2)
        Call SendEmail

        Battery_Low_Warning_Reset = False
    EndIf
EndSub


Sub Failed_Sampling_Email(_instrument_ As String * 50)
    Call Email_Init(0, _instrument_ & " sampling failed.")
    Call SendEmail
    SaveLog = True
EndSub
