Dim RawTriplet As String * 200

Public Triplet(11) As String : Alias Triplet = Triplet_Date, Triplet_Hour, Sct_wl, Raw_Sct, Sct_Value, Chl_wl, Raw_Chl, Chl_Value, FDOM_wl, Raw_FDOM, FDOM_Value

Dim UpdateTripleTable As Boolean = false
    'Scattering = Round(Sct_Value,7)
    'Chlorophyll = CTYPE(Chl_Value, float)
    'FDOM = CTYPE(FDOM_Value, float)

DataTable(FileTriplet,UpdateTripleTable,-1)
  DataInterval(0,0,Sec,10)
  Sample (1,Raw_Sct,String)
  Sample (1,Sct_Value,String)
  Sample (1,Raw_Chl,String)
  Sample (1,Chl_Value,String)
  Sample (1,Raw_FDOM,String)
  Sample (1,FDOM_Value,String)
EndTable

'### Sampling ###

Function TripletTagString as String
  'Values are put in CTYPE to convert from scientific notation (0.00E+00)  float notation.
  SprintF(TripletTagString,"[TRP1]%.7f,%.7f,%.7f,", Sct_Value, Chl_Value, FDOM_Value) ' Fixme To test
  'TripletTagString = "[TRP1]" & Round(Sct_Value,7) & "," & CTYPE(Chl_Value, float) & "," & CTYPE(FDOM_Value, float)
EndFunction


Sub StartTripletTimer
  Timer(Triplet_Timer, Sec, 2)
EndSub


Sub StartTriplet
  'ECO-Triplet/w (W3) Start
  If With_Triplet Then
    WhereAmI = "Start Triplet"
    Call logging("Start Triplet")
    SerialFlush(SerialTriplet)
    SerialOpen(SerialTriplet,19200,3,20,500) 'Triplet string is around 100 char.
    SerialOut(SerialTriplet,CHR(13)&CHR(10),0,2,100)
    SerialOut(SerialTriplet,"!!!!!!!!","Mem",1,600)
    SerialOut(SerialTriplet,"$run"&CHR(13),0,1,10)
    
    Call StartTripletTimer

  EndIf
EndSub


Sub CollectTriplet
  ' &4242 -> BB &0D0A -> CR LF
  Dim NBR ' Number of Bytes Returned  
  If With_Triplet Then
    WhereAmI = "Collect triplet"
    
    Triplet() = ""
    
    Call TimerDelay_Sec(Triplet_Timer, Triplet_Delay_Sec)
    
    SerialInRecord(SerialTriplet,RawTriplet,&H4242,0,&H0D0A,NBR,01)
    
    SerialClose(SerialTriplet)
    
    RawTriplet = "BB"+RawTriplet
    SplitStr(Triplet(),RawTriplet,CHR(09),11,4)
    
    UpdateTripleTable = true
    
    TAGString = TripletTagString()
    Call WriteTagString
  EndIf
EndSub
