' GPS_HVS related code
'### Serial Port ###
' Const SerialGPS = 16 'U11-U12 (trouble with GPS_HVS on SDM)


'### Data Variables ###
Dim RawGPS As String * 100
'GPS is a builtin CR6 array 
Dim GPS_HVS(13) As String : Alias GPS_HVS = GPS_Header, GPS_Time, GPS_Status, GPS_Lat, GPS_Lat_Hem, GPS_Lon, GPS_Lon_Hem, GPS_SOG, GPS_COG, GPS_Date, GPS_Mag_Var, GPS_Mag_Var_Dir, GPS_Check

' Variable For GPS_HVS Tabe
Public Latitude As String
Public Longitude As String
Public SOG As Float = ""
Public COG As Float = ""
Public Magnetic_Variation As Float = ""


'### Units ###
Units SOG = Kn
Units COG = °
Units GPS_Mag_Var = °

Dim UpdateGPSTable As Boolean = false

'### Tables ###
DataTable(FileGPS,UpdateGPSTable,-1)
    DataInterval(0,0,Sec,10)
    Sample(1,GPS_Date, String)
    Sample(1,GPS_Time, String)
    Sample(1,Latitude, String)
    Sample(1,Longitude, String)  
    Sample(1,SOG, IEEE4)
    Sample(1,COG, IEEE4)
    Sample(1,Magnetic_Variation , IEEE4)
EndTable

Sub StartGPS
    SerialOpen(SerialGPS,19200,3,20,1000)
    SerialFlush(SerialGPS)
EndSub


Sub CollectGPS(Optional single_sample As Boolean = false)
    Dim X, number_of_sample
    Dim UV(2) As Float = {0, 0}: Alias UV = U, V
    Dim TestVar As String * 100 = "ABCDEF"
    
    Call logging("TestVar: " & TestVar)

    TestVar = "Dim in Subs are not ReInitialized ..."

    UV() = 0
    Call logging("Test for var reset (UV): " & UV() & "//" & UV & "//" & UV(1) & UV(2)) 
    GPS_HVS() = "" ' Reset Var
    
    Latitude = "" ' Reset to missing ? -> "#°#'#" or empty
    Longitude = ""
    SOG = ""
    COG = ""

    If single_sample Then
        number_of_sample = 1
    Else
        number_of_sample = GPS_Sample_Size
    EndIf

    ' Averaging SOG and COG over time. 
    ' FIXME test if the For Loop stops when X = number_of_sample or when X > number_of_sample
    For X = 1 To number_of_sample Step 1 ' GPS should be setup to 1 sec interval to get GPS_Sample_Size to correspond to seconds.
        SerialIn(RawGPS,SerialGPS,150,10,80)
        SplitStr(GPS_HVS,RawGPS,",",13,5)
        
        If GPS_SOG = "" Then
            UV() = ""
            ExitFor
        Else
            U += CTYPE(GPS_SOG, float) * COS(CTYPE(GPS_COG, float))
            V += CTYPE(GPS_SOG, float) * SIN(CTYPE(GPS_COG, float))
        EndIf
    Next
    
    If RawGPS <> "" Then
        'COG and SOG time averaging.
        SOG = Round( SQR(U^2 + V^2) / number_of_sample, 2)
        COG = Round( ATN2(V, U), 1) MOD 360

        ' The last reiceved data are used to set the remainings variables. ' FIXME what if GPS_Date and GPS_TIME are bad. (Missing)
        'Formatting Date & Time String
        GPS_Date = "20"&Mid(GPS_Date,5,2) &"-"& Mid(GPS_Date,3,2) &"-"& Mid(GPS_Date,1,2)
        GPS_Time = Mid(GPS_Time,1,2) &":"& Mid(GPS_Time,3,2) &":"& Mid(GPS_Time,5,2)

        ' Converting Lat, Lon to Degree
        Latitude = Mid(GPS_Lat,1,2) &"°"& Mid(GPS_Lat,3,6) &"'"& GPS_Lat_Hem
        Longitude = Mid(GPS_Lon,1,3) &"°"& Mid(GPS_Lon,4,6) &"'"& GPS_Lon_Hem

        ' Converting Magnetic Variation to decimal
        Magnetic_Variation  = CTYPE(GPS_Mag_Var, float) ' Test if it works
        If GPS_Mag_Var_Dir = "W" Then
            Magnetic_Variation  += -1
        EndIf

        'If Mid(GPS_Mag_Var_Dir,1,1) = "W" Then 
        '    GPS_Mag_Var = "-"&Mid(GPS_Mag_Var,2,5)
        'Else
        '    GPS_Mag_Var = "+"&Mid(GPS_Mag_Var,2,5)
        'EndIf 
    EndIf
EndSub


'### Sampling ###
Sub SampleGPS
    If With_GPS Then
        WhereAmI = "Sample GPS_HVS"
        Call logging("Sampling GPS")
        
        Call StartGPS

        Call CollectGPS
        
        SerialClose(SerialGPS)
        
        UpdateGPSTable = true
        
        WhereAmI = "EndGPS"
    EndIf
EndSub
