' SBE37 related code
'### Serial Port ###
' Const SerialSBE37 = 36 'RS232

'### Data Variables ###
Const SBE37_RawSample_Length = 38
Dim RawSBE37 As String * 40
Dim SBE37(4) As Float : Alias SBE37 = SBE37_Temperature, SBE37_Conductivity, SBE37_Salinity, SBE37_Density
Units SBE37_Temperature = °C
Units SBE37_Conductivity = S/m
Units SBE37_Salinity = PSU
Units SBE37_Density = Kg/m³

Public SBE37_In_Saltwater As Boolean = false

Dim UpdateSBE37Table As Boolean = false

'### Tables ###
DataTable (FileSBE37,UpdateSBE37Table,-1) 
	DataInterval (0,0,Sec,10)
  Sample (1,SBE37_Temperature,IEEE4)
  Sample (1,SBE37_Conductivity,IEEE4)
  Sample (1,SBE37_Salinity,IEEE4)
  Sample (1,SBE37_Density,IEEE4)
EndTable


Function SBE37TagString as String
  SBE37TagString = "[CTD]" & SBE37_Temperature & "," & SBE37_Conductivity & "," & SBE37_Salinity & "," & SBE37_Density
EndFunction


'### Sampling ###
Sub StartSBE37
  Call logging("Starting SBE37")
  SerialOpen(SerialSBE37,19200,3,20,50) 'CTD string is 38 char.
  SerialFlush(SerialSBE37) 
EndSub


Sub SBE37SalinityCheck
  Dim X
  Dim RawSBE37_Test As String * 40
  Dim SBE37_Test(4) as Float

  SBE37_In_Saltwater = false
  
  If With_SBE37 AND Not Bypass_Salinity Then ' NOT IF BYPASS SALINITY IS TRUE ?? FIMXE
    WhereAmI = "SBE37 Salinity Check"
    Call logging("SBE37 Salinity Check")
    
    Call StartSBE37
    
    For X = 1 To 3 Step 1
      SerialOut(SerialSBE37,CHR(13),"S>",1,50)          ' Contact SBE37, expect `S>`
      SerialOut(SerialSBE37,"ts"&CHR(13),CHR(10),1,50)  ' Send: `Take, Send` sample command.
      SerialIn(RawSBE37_Test,SerialSBE37,400,13,120) 
      SplitStr(SBE37_Test, RawSBE37_Test,",",4,0) ' With option 0: filter string ignored
      
      Call logging("RawSBE37 (attempt "&X&"): " & RawSBE37_Test)
      
      If Len(RawSBE37_Test) = SBE37_RawSample_Length Then ' Check String length a
        If SBE37_Test(3) > Required_Salinity Then ' Check Salinity
          SBE37_In_Saltwater = true
          ExitFor
        EndIf
      EndIf
    Next X
    
    SerialClose(SerialSBE37)
    Call logging("SBE37_In_Saltwater: " & SBE37_In_Saltwater)
  EndIf  
EndSub


Sub CollectSBE37
  ' If the data were not received after sending the `tss` command,
  ' we assume that the CTD has received the `tss` command thus, we send 
  ' the `sl` command. Otherwise the ctd internal storage will have duplicate sample.
  
  Dim X
  Call logging("Collecting SBE37")
  
  For X = 1 To 3 Step 1
    
    SerialOut(SerialSBE37,CHR(13),"S>",1,50)            ' Contact SBE37, expect `S>`
    
    If X = 1 Then
      SerialOut(SerialSBE37,"tss"&CHR(13),CHR(10),1,50) ' Send: `Take, Store, Send` sample Command.
    Else                                                
      SerialOut(SerialSBE37,"sl"&CHR(13),CHR(10),1,50)  ' Send: `Send Last` command
    EndIf
    
    SerialIn(RawSBE37,SerialSBE37,400,13,60)
    SplitStr(SBE37,RawSBE37,",",4,0)

    Call logging("RawSBE37 (attempt "&X&"): " & RawSBE37)
    
    If Len(RawSBE37) = SBE37_RawSample_Length AND SBE37(4) <> "" Then ' Check String length and that at least values were sent.
      ExitFor
    EndIf
  
  Next X

  If RawSBE37 = "" Then
    Call Send_Failled_Sampling_Email("SBE37")
  EndIf

  Call logging("SBE37 Collected")
EndSub


Sub SampleSBE37
  SBE37() = "" ' Always reset since it is used in calculation
  
  If With_SBE37 Then
    WhereAmI = "Sampling SBE37"
    Call logging("Sampling SBE37")
    
    Call StartSBE37

    Call CollectSBE37
      
    SerialClose(SerialSBE37) ' For some Reason, this is problematic ??? 
    ' It hangs at the first `Scan` of the Update SBE37Table. 

    UpdateSBE37Table = true
  
    TAGString &= "\n" & SBE37TagString()
    ' Call WriteTagString
    WhereAmI = "SBE37 Sampling finished"
    Call logging("SBE37 Sampled")
  EndIf
  
EndSub
